CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:421
GitHash:
ModuleCount:104
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:2
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<ROI>.*)_(?P<posneg>.*) (?P<id>.*) (?P<biopsy>.*) (?P<visit>.*)_(?P<format>.*)
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    Extract metadata from:All images
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    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<ROI>.*)_(?P<posneg>.*) (?P<id>.*) (?P<biopsy>.*) (?P<visit>.*)_(?P<format>.*)_(?P<prob>.*)_(?P<map>.*)
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Match metadata:[{'blackbg': 'ROI', 'nuc_rings': 'ROI', 'raw': 'ROI', 'Greenslime': 'ROI', 'redstaining': 'ROI', 'Laminapropria': 'ROI', 'TissueBg': 'ROI'}, {'blackbg': 'biopsy', 'nuc_rings': 'biopsy', 'raw': 'biopsy', 'Greenslime': 'biopsy', 'redstaining': 'biopsy', 'Laminapropria': 'biopsy', 'TissueBg': 'biopsy'}, {'blackbg': 'id', 'nuc_rings': 'id', 'raw': 'id', 'Greenslime': 'id', 'redstaining': 'id', 'Laminapropria': 'id', 'TissueBg': 'id'}, {'blackbg': 'posneg', 'nuc_rings': 'posneg', 'raw': 'posneg', 'Greenslime': 'posneg', 'redstaining': 'posneg', 'Laminapropria': 'posneg', 'TissueBg': 'posneg'},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
    Image set matching method:Metadata
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    Assignments count:7
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file doesnot contain "Probabilities")
    Name to assign these images:raw
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    Select the image type:Color image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "_1")
    Name to assign these images:nuc_rings
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "_3")
    Name to assign these images:blackbg
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "_5")
    Name to assign these images:Greenslime
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "_2")
    Name to assign these images:redstaining
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "_0")
    Name to assign these images:Laminapropria
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "_4")
    Name to assign these images:TissueBg
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
Resize:[module_num:5|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
    Select the input image:blackbg
    Name the output image:Rsblackbg
    Resizing method:Resize by specifying desired final dimensions
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    Interpolation method:Nearest Neighbor
    Method to specify the dimensions:Image
    Select the image with the desired dimensions:raw
    Additional image count:5
    Select the additional image?:nuc_rings
    Name the output image:Rsnuc_rings
    Select the additional image?:Greenslime
    Name the output image:RsGreenslime
    Select the additional image?:redstaining
    Name the output image:RsRedstaining
    Select the additional image?:Laminapropria
    Name the output image:RsLP
    Select the additional image?:TissueBg
    Name the output image:RsTissueBg

IdentifyPrimaryObjects:[module_num:6|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
    Select the input image:RsRedstaining
    Name the primary objects to be identified:Redstain
    Typical diameter of objects, in pixel units (Min,Max):150,10000000
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:Never
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0
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    Manual threshold:0.25
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
Smooth:[module_num:7|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
    Select the input image:Rsnuc_rings
    Name the output image:Snuc_rings
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:5
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
IdentifyPrimaryObjects:[module_num:8|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
    Select the input image:Snuc_rings
    Name the primary objects to be identified:nucleirings
    Typical diameter of objects, in pixel units (Min,Max):70,20000000
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:Never
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.4,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
CombineObjects:[module_num:9|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
    Select initial object set:Redstain
    Select object set to combine:nucleirings
    Select how to handle overlapping objects:Preserve
    Name the combined object set:mergeEPECAD

MaskImage:[module_num:10|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
    Select the input image:RsTissueBg
    Name the output image:maskedTissueBg
    Use objects or an image as a mask?:Objects
    Select object for mask:mergeEPECAD
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    Invert the mask?:Yes

MaskImage:[module_num:11|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
    Select the input image:RsLP
    Name the output image:MaskedLP
    Use objects or an image as a mask?:Objects
    Select object for mask:mergeEPECAD
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    Invert the mask?:Yes

IdentifyPrimaryObjects:[module_num:12|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
    Select the input image:RsGreenslime
    Name the primary objects to be identified:IDGreenSlime
    Typical diameter of objects, in pixel units (Min,Max):10,40
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:Never
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:1.3488
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    Manual threshold:0.3
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
MaskImage:[module_num:13|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
    Select the input image:raw
    Name the output image:raw1
    Use objects or an image as a mask?:Objects
    Select object for mask:IDGreenSlime
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    Invert the mask?:Yes

IdentifyPrimaryObjects:[module_num:14|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
    Select the input image:maskedTissueBg
    Name the primary objects to be identified:IDTissueBg
    Typical diameter of objects, in pixel units (Min,Max):50,100000000
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:Never
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0
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    Manual threshold:0.2
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
MaskImage:[module_num:15|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
    Select the input image:raw1
    Name the output image:raw2
    Use objects or an image as a mask?:Objects
    Select object for mask:IDTissueBg
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    Invert the mask?:Yes

IdentifyPrimaryObjects:[module_num:16|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
    Select the input image:MaskedLP
    Name the primary objects to be identified:IDLP
    Typical diameter of objects, in pixel units (Min,Max):10,40
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:Never
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:1.3488
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    Manual threshold:0.3
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
MaskImage:[module_num:17|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
    Select the input image:raw2
    Name the output image:raw3
    Use objects or an image as a mask?:Objects
    Select object for mask:IDLP
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    Invert the mask?:Yes

IdentifyPrimaryObjects:[module_num:18|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
    Select the input image:Rsblackbg
    Name the primary objects to be identified:IDblackbg
    Typical diameter of objects, in pixel units (Min,Max):10,40
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:Never
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:1.3488
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    Manual threshold:0.3
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
MaskImage:[module_num:19|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
    Select the input image:raw3
    Name the output image:raw4
    Use objects or an image as a mask?:Objects
    Select object for mask:IDblackbg
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    Invert the mask?:Yes

ColorToGray:[module_num:20|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
    Select the input image:raw4
    Conversion method:Split
    Image type:RGB
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    Convert red to gray?:Yes
    Name the output image:OrigRed
    Convert green to gray?:Yes
    Name the output image:OrigGreen
    Convert blue to gray?:Yes
    Name the output image:OrigBlue
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
IdentifyPrimaryObjects:[module_num:21|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
    Select the input image:OrigRed
    Name the primary objects to be identified:Ecadherinstaining
    Typical diameter of objects, in pixel units (Min,Max):4,10000000000
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:Never
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0
    Threshold correction factor:0.7
    Lower and upper bounds on threshold:0.03,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
ColorToGray:[module_num:22|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
    Select the input image:raw4
    Conversion method:Combine
    Image type:RGB
    Name the output image:Raw4Gray
    Relative weight of the red channel:1.0
    Relative weight of the green channel:1.0
    Relative weight of the blue channel:1.0
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
IdentifyPrimaryObjects:[module_num:23|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
    Select the input image:Raw4Gray
    Name the primary objects to be identified:epithelialtissue
    Typical diameter of objects, in pixel units (Min,Max):10,1000000000000
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:Never
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0
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    Manual threshold:0.00001
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
OverlayOutlines:[module_num:24|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:raw
    Name the output image:test
    Outline display mode:Color
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    How to outline:Outer
    Select outline color:#FB0207
    Select objects to display:Ecadherinstaining
    Select outline color:#FFFFFF
    Select objects to display:epithelialtissue

SaveImages:[module_num:25|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:test
    Select method for constructing file names:From image filename
    Select image name for file prefix:raw
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_CD4image
    Saved file format:png
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

MeasureImageAreaOccupied:[module_num:26|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
    Measure the area occupied by:Objects
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    Select object sets to measure:Ecadherinstaining, epithelialtissue

ExportToSpreadsheet:[module_num:27|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enabled:False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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements:Image|AreaOccupied_AreaOccupied_epithelialtissue,Image|AreaOccupied_AreaOccupied_Ecadherinstaining
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:GRFT_
    Overwrite existing files without warning?:Yes
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes

ConvertObjectsToImage:[module_num:28|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
    Select the input objects:mergeEPECAD
    Name the output image:epithelialecad
    Select the color format:Binary (black & white)
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
IdentifyPrimaryObjects:[module_num:29|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
    Select the input image:epithelialecad
    Name the primary objects to be identified:Ecad
    Typical diameter of objects, in pixel units (Min,Max):10,40
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:Never
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
GaussianFilter:[module_num:30|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
    Select the input image:RsGreenslime
    Name the output image:GaussianSlime
    Sigma:5

IdentifyPrimaryObjects:[module_num:31|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
    Select the input image:GaussianSlime
    Name the primary objects to be identified:Greenslimebg
    Typical diameter of objects, in pixel units (Min,Max):150,10000000
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0
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    Manual threshold:0.5
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
ImageMath:[module_num:32|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
    Operation:Invert
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:invertblackbg
    Image or measurement?:Image
    Select the first image:Rsblackbg
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
IdentifyPrimaryObjects:[module_num:33|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
    Select the input image:invertblackbg
    Name the primary objects to be identified:tissueare
    Typical diameter of objects, in pixel units (Min,Max):10,40
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:Never
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:1.3488
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    Manual threshold:0.6
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
ColorToGray:[module_num:34|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
    Select the input image:raw
    Conversion method:Combine
    Image type:RGB
    Name the output image:GrayforROI
    Relative weight of the red channel:1.0
    Relative weight of the green channel:1.0
    Relative weight of the blue channel:1.0
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
ColorToGray:[module_num:35|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
    Select the input image:raw
    Conversion method:Split
    Image type:RGB
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    Convert red to gray?:Yes
    Name the output image:Red
    Convert green to gray?:Yes
    Name the output image:Green
    Convert blue to gray?:Yes
    Name the output image:Blue
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
IdentifyPrimaryObjects:[module_num:36|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
    Select the input image:GrayforROI
    Name the primary objects to be identified:roi
    Typical diameter of objects, in pixel units (Min,Max):10,40
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0
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    Manual threshold:0
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
MaskImage:[module_num:37|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
    Select the input image:raw
    Name the output image:raw1
    Use objects or an image as a mask?:Objects
    Select object for mask:tissueare
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    Invert the mask?:No

MaskImage:[module_num:38|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
    Select the input image:raw1
    Name the output image:raw2
    Use objects or an image as a mask?:Objects
    Select object for mask:Greenslimebg
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    Invert the mask?:Yes

ColorToGray:[module_num:39|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
    Select the input image:raw2
    Conversion method:Split
    Image type:RGB
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    Convert red to gray?:Yes
    Name the output image:OrigRed
    Convert green to gray?:Yes
    Name the output image:OrigGreen
    Convert blue to gray?:Yes
    Name the output image:OrigBlue
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
ColorToGray:[module_num:40|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
    Select the input image:raw2
    Conversion method:Combine
    Image type:RGB
    Name the output image:OrigGray
    Relative weight of the red channel:1.0
    Relative weight of the green channel:1.0
    Relative weight of the blue channel:1.0
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
IdentifyPrimaryObjects:[module_num:41|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
    Select the input image:OrigGray
    Name the primary objects to be identified:TissueareaNOgreenBg
    Typical diameter of objects, in pixel units (Min,Max):10,40
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:Never
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:1.3488
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    Manual threshold:0.001
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
MeasureImageAreaOccupied:[module_num:42|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
    Measure the area occupied by:Objects
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    Select object sets to measure:Ecad, TissueareaNOgreenBg, tissueare

MeasureImageIntensity:[module_num:43|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
    Select images to measure:Red
    Measure the intensity only from areas enclosed by objects?:Yes
    Select input object sets:Ecad
    Calculate custom percentiles:No
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
MeasureImageIntensity:[module_num:44|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
    Select images to measure:Red
    Measure the intensity only from areas enclosed by objects?:Yes
    Select input object sets:nucleirings
    Calculate custom percentiles:No
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
EnhanceOrSuppressFeatures:[module_num:45|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
    Select the input image:OrigBlue
    Name the output image:EnhanceOrSuppressFeatures
    Select the operation:Enhance
    Feature size:50
    Feature type:Speckles
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    Speed and accuracy:Fast
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
ImageMath:[module_num:46|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
    Operation:Log transform (base 2)
    Raise the power of the result by:1.0
    Multiply the result by:2.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:ImageAfterMath
    Image or measurement?:Image
    Select the first image:EnhanceOrSuppressFeatures
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
IdentifyPrimaryObjects:[module_num:47|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
    Select the input image:ImageAfterMath
    Name the primary objects to be identified:prenuclei
    Typical diameter of objects, in pixel units (Min,Max):12,75
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:10
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:Never
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:0.5
    Lower and upper bounds on threshold:0.015,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
ExpandOrShrinkObjects:[module_num:48|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
    Select the input objects:prenuclei
    Name the output objects:ShrunkenNuclei
    Select the operation:Shrink objects to a point
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    Fill holes in objects so that all objects shrink to a single point?:Yes

IdentifySecondaryObjects:[module_num:49|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
    Select the input objects:ShrunkenNuclei
    Name the objects to be identified:Nuclei
    Select the method to identify the secondary objects:Distance - B
    Select the input image:OrigBlue
    Number of pixels by which to expand the primary objects:12
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    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.0
    Threshold correction factor:0.6
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:Yes
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
MaskObjects:[module_num:50|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
    Select objects to be masked:Nuclei
    Name the masked objects:ProbEpithelialnuclei
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:nucleirings
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    Handling of objects that are partially masked:Remove depending on overlap
    Fraction of object that must overlap:0.8
    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:51|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
    Select objects to be masked:Nuclei
    Name the masked objects:ProbLPnuclei
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:ProbEpithelialnuclei
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

IdentifySecondaryObjects:[module_num:52|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
    Select the input objects:ProbLPnuclei
    Name the objects to be identified:ProbLPcells
    Select the method to identify the secondary objects:Distance - N
    Select the input image:OrigBlue
    Number of pixels by which to expand the primary objects:3
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    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
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
IdentifySecondaryObjects:[module_num:53|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
    Select the input objects:ProbEpithelialnuclei
    Name the objects to be identified:ProbEpithelialcells
    Select the method to identify the secondary objects:Distance - B
    Select the input image:epithelialecad
    Number of pixels by which to expand the primary objects:15
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    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:1
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    Manual threshold:0.5
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
ExpandOrShrinkObjects:[module_num:54|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
    Select the input objects:Greenslimebg
    Name the output objects:expandGreenbg
    Select the operation:Expand objects by a specified number of pixels
    Number of pixels by which to expand or shrink:2
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
MaskObjects:[module_num:55|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
    Select objects to be masked:ProbLPcells
    Name the masked objects:LPcells
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:expandGreenbg
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    Handling of objects that are partially masked:Remove
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:56|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
    Select objects to be masked:ProbEpithelialcells
    Name the masked objects:PreEpithelialcells
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:expandGreenbg
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    Handling of objects that are partially masked:Remove
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:57|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
    Select objects to be masked:PreEpithelialcells
    Name the masked objects:Epithelialcells
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:LPcells
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MeasureObjectIntensity:[module_num:58|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
    Select images to measure:Red
    Select objects to measure:Epithelialcells, Ecad, LPcells

MeasureImageIntensity:[module_num:59|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
    Select images to measure:Red
    Measure the intensity only from areas enclosed by objects?:Yes
    Select input object sets:LPcells
    Calculate custom percentiles:No
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
MeasureImageIntensity:[module_num:60|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
    Select images to measure:Red
    Measure the intensity only from areas enclosed by objects?:Yes
    Select input object sets:Epithelialcells
    Calculate custom percentiles:No
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
MeasureImageIntensity:[module_num:61|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
    Select images to measure:Red
    Measure the intensity only from areas enclosed by objects?:Yes
    Select input object sets:Ecad
    Calculate custom percentiles:No
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
MeasureImageIntensity:[module_num:62|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
    Select images to measure:Green
    Measure the intensity only from areas enclosed by objects?:Yes
    Select input object sets:tissueare
    Calculate custom percentiles:No
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
MeasureImageIntensity:[module_num:63|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
    Select images to measure:Green
    Measure the intensity only from areas enclosed by objects?:Yes
    Select input object sets:TissueareaNOgreenBg
    Calculate custom percentiles:No
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
MeasureImageIntensity:[module_num:64|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
    Select images to measure:Red
    Measure the intensity only from areas enclosed by objects?:Yes
    Select input object sets:tissueare
    Calculate custom percentiles:No
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
MeasureImageIntensity:[module_num:65|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
    Select images to measure:Red
    Measure the intensity only from areas enclosed by objects?:Yes
    Select input object sets:TissueareaNOgreenBg
    Calculate custom percentiles:No
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
MeasureImageAreaOccupied:[module_num:66|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
    Measure the area occupied by:Objects
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    Select object sets to measure:Ecad, Epithelialcells, LPcells, Nuclei, roi

FilterObjects:[module_num:67|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
    Select the objects to filter:Epithelialcells
    Name the output objects:EpithelialRedCells
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a seperate set?:No
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    Select the measurement to filter by:Intensity_MeanIntensity_Red
    Filter using a minimum measurement value?:Yes
    Minimum value:0.03
    Filter using a maximum measurement value?:No
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
FilterObjects:[module_num:68|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
    Select the objects to filter:LPcells
    Name the output objects:LPRedCells
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a seperate set?:No
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    Select the measurement to filter by:Intensity_MeanIntensity_Red
    Filter using a minimum measurement value?:Yes
    Minimum value:0.03
    Filter using a maximum measurement value?:No
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
MeasureObjectIntensity:[module_num:69|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
    Select images to measure:Red
    Select objects to measure:EpithelialRedCells

MeasureImageIntensity:[module_num:70|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
    Select images to measure:Red
    Measure the intensity only from areas enclosed by objects?:Yes
    Select input object sets:EpithelialRedCells
    Calculate custom percentiles:No
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
MeasureObjectIntensity:[module_num:71|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
    Select images to measure:Red
    Select objects to measure:LPRedCells

MeasureImageIntensity:[module_num:72|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
    Select images to measure:Red
    Measure the intensity only from areas enclosed by objects?:Yes
    Select input object sets:LPRedCells
    Calculate custom percentiles:No
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
MeasureImageAreaOccupied:[module_num:73|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
    Measure the area occupied by:Objects
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    Select object sets to measure:EpithelialRedCells, LPRedCells

OverlayOutlines:[module_num:74|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:raw2
    Name the output image:Ecad_overlay
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:Red
    Select objects to display:Ecad

OverlayOutlines:[module_num:75|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:raw2
    Name the output image:ProbRedcells
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:#FFFFFF
    Select objects to display:Epithelialcells
    Select outline color:#FFFFFF
    Select objects to display:LPcells
    Select outline color:#FB0207
    Select objects to display:EpithelialRedCells
    Select outline color:#FB0207
    Select objects to display:LPRedCells

SaveImages:[module_num:76|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
    Select the type of image to save:Image
    Select the image to save:ProbRedcells
    Select method for constructing file names:From image filename
    Select image name for file prefix:raw
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_Redcells
    Saved file format:png
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

SaveImages:[module_num:77|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
    Select the type of image to save:Image
    Select the image to save:Ecad_overlay
    Select method for constructing file names:From image filename
    Select image name for file prefix:raw
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_Ecad
    Saved file format:png
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

MeasureImageIntensity:[module_num:78|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
    Select images to measure:OrigGreen
    Measure the intensity only from areas enclosed by objects?:No
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    Calculate custom percentiles:No
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
Smooth:[module_num:79|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
    Select the input image:OrigGreen
    Name the output image:gaussiangreen
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:150
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
ImageMath:[module_num:80|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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:Gaussiansubtractgreen
    Image or measurement?:Image
    Select the first image:OrigGreen
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:gaussiangreen
    Multiply the second image by:1.0
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
IdentifyPrimaryObjects:[module_num:81|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notes:['']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
    Select the input image:Gaussiansubtractgreen
    Name the primary objects to be identified:CD4staining
    Typical diameter of objects, in pixel units (Min,Max):12,1000000
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:Never
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.7
    Lower and upper bounds on threshold:0.04,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:Yes
    Assign pixels in the middle intensity class to the foreground or the background?:Background
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
ConvertObjectsToImage:[module_num:82|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
    Select the input objects:CD4staining
    Name the output image:CD4stainingimage
    Select the color format:Binary (black & white)
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
MeasureImageAreaOccupied:[module_num:83|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
    Measure the area occupied by:Objects
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    Select object sets to measure:CD4staining, Epithelialcells, LPcells

MeasureObjectIntensity:[module_num:84|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
    Select images to measure:CD4stainingimage
    Select objects to measure:CD4staining, Epithelialcells, LPcells

FilterObjects:[module_num:85|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
    Select the objects to filter:LPcells
    Name the output objects:CD4LPcells
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a seperate set?:No
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    Select the measurement to filter by:Intensity_IntegratedIntensity_CD4stainingimage
    Filter using a minimum measurement value?:Yes
    Minimum value:65
    Filter using a maximum measurement value?:No
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
FilterObjects:[module_num:86|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
    Select the objects to filter:Epithelialcells
    Name the output objects:CD4EpithelialCells
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a seperate set?:No
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    Select the measurement to filter by:Intensity_IntegratedIntensity_CD4stainingimage
    Filter using a minimum measurement value?:Yes
    Minimum value:65
    Filter using a maximum measurement value?:No
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
MeasureObjectIntensity:[module_num:87|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
    Select images to measure:Green
    Select objects to measure:CD4LPcells

MeasureImageIntensity:[module_num:88|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
    Select images to measure:Green
    Measure the intensity only from areas enclosed by objects?:Yes
    Select input object sets:CD4LPcells
    Calculate custom percentiles:No
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
MeasureObjectIntensity:[module_num:89|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
    Select images to measure:Green
    Select objects to measure:CD4EpithelialCells

MeasureImageIntensity:[module_num:90|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
    Select images to measure:Green
    Measure the intensity only from areas enclosed by objects?:Yes
    Select input object sets:CD4EpithelialCells
    Calculate custom percentiles:No
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
MeasureObjectIntensity:[module_num:91|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
    Select images to measure:Green
    Select objects to measure:LPcells

MeasureImageIntensity:[module_num:92|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
    Select images to measure:Green
    Measure the intensity only from areas enclosed by objects?:Yes
    Select input object sets:LPcells
    Calculate custom percentiles:No
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
MeasureObjectIntensity:[module_num:93|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
    Select images to measure:Green
    Select objects to measure:Epithelialcells

MeasureImageIntensity:[module_num:94|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
    Select images to measure:Green
    Measure the intensity only from areas enclosed by objects?:Yes
    Select input object sets:Epithelialcells
    Calculate custom percentiles:No
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
MeasureImageAreaOccupied:[module_num:95|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
    Measure the area occupied by:Objects
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    Select object sets to measure:CD4EpithelialCells, CD4LPcells

OverlayOutlines:[module_num:96|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:raw2
    Name the output image:CD4image
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:#FFFFFF
    Select objects to display:Epithelialcells
    Select outline color:#FFFFFF
    Select objects to display:LPcells
    Select outline color:#FB0207
    Select objects to display:CD4LPcells
    Select outline color:#FB0207
    Select objects to display:CD4EpithelialCells

ConvertObjectsToImage:[module_num:97|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
    Select the input objects:nucleirings
    Name the output image:Nucleiringsimage
    Select the color format:Binary (black & white)
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
ImageMath:[module_num:98|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
    Operation:Invert
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:No
    Set values greater than 1 equal to 1?:No
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:Invertnucleirings
    Image or measurement?:Image
    Select the first image:Nucleiringsimage
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
Morph:[module_num:99|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
    Select the input image:Invertnucleirings
    Name the output image:Nucleiringsdistance
    Select the operation to perform:distance
    Number of times to repeat operation:Once
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    Rescale values from 0 to 1?:No

MeasureImageIntensity:[module_num:100|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
    Select images to measure:Nucleiringsdistance
    Measure the intensity only from areas enclosed by objects?:Yes
    Select input object sets:CD4LPcells
    Calculate custom percentiles:No
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
CalculateMath:[module_num:101|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
    Name the output measurement:AveDistCD4fromEpithelium
    Operation:None
    Select the numerator measurement type:Image
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    Select the numerator measurement:Intensity_MeanIntensity_Nucleiringsdistance_CD4LPcells
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
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    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    How should the output value be rounded?:Not rounded
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    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:102|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
    Name the output measurement:AveDistCD4fromEpithelium
    Operation:None
    Select the numerator measurement type:Image
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    Select the numerator measurement:Intensity_UpperQuartileIntensity_Nucleiringsdistance_CD4LPcells
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
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    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    How should the output value be rounded?:Not rounded
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    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
SaveImages:[module_num:103|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
    Select the type of image to save:Image
    Select the image to save:CD4image
    Select method for constructing file names:From image filename
    Select image name for file prefix:raw
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_CD4image
    Saved file format:png
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

ExportToSpreadsheet:[module_num:104|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements:Image|Intensity_MeanIntensity_Green_CD4LPcells,Image|Intensity_MeanIntensity_Green_Epithelialcells,Image|Intensity_MeanIntensity_Green_tissueare,Image|Intensity_MeanIntensity_Green_LPcells,Image|Intensity_MeanIntensity_Green_CD4EpithelialCells,Image|Intensity_MeanIntensity_Green_TissueareaNOgreenBg,Image|Intensity_MeanIntensity_Red_LPcells,Image|Intensity_MeanIntensity_Red_Epithelialcells,Image|Intensity_MeanIntensity_Red_LPRedCells,Image|Intensity_MeanIntensity_Red_Ecad,Image|Intensity_MeanIntensity_Red_TissueareaNOgreenBg,Image|Intensity_MeanIntensity_Red_tissueare,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:GRFT_
    Overwrite existing files without warning?:Yes
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
