CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:421
GitHash:
ModuleCount:61
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:2
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<ROI>.*)_(?P<PosNeg>.*) (?P<PatID>.*) (?P<Biopsy>.*) (?P<Visit>.*)_(?P<ds>.*)
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    Extract metadata from:All images
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    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<ROI>.*)_(?P<PosNeg>.*) (?P<PatID>.*) (?P<Biopsy>.*) (?P<Visit>.*)_(?P<ds>.*)_(?P<Prob>.*)_(?P<Probabillity>.*)
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Match metadata:[{'BlackBg': 'ROI', 'LP': 'ROI', 'Raw': 'ROI', 'Rings': 'ROI', 'staining': 'ROI', 'tissuebg': 'ROI', 'Greenfiber': 'ROI'}, {'BlackBg': 'PosNeg', 'LP': 'PosNeg', 'Raw': 'PosNeg', 'Rings': 'PosNeg', 'staining': 'PosNeg', 'tissuebg': 'PosNeg', 'Greenfiber': 'PosNeg'}, {'BlackBg': 'PatID', 'LP': 'PatID', 'Raw': 'PatID', 'Rings': 'PatID', 'staining': 'PatID', 'tissuebg': 'PatID', 'Greenfiber': 'PatID'}, {'BlackBg': 'Biopsy', 'LP': 'Biopsy', 'Raw': 'Biopsy', 'Rings': 'Biopsy', 'staining': 'Biopsy', 'tissuebg': 'Biopsy', 'Greenfiber': 'Biopsy'}, {'BlackBg': 'Visit', 'LP': 'Visit', 'Raw': 'Visit',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
    Image set matching method:Metadata
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    Assignments count:7
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file doesnot contain "Probabilities")
    Name to assign these images:Raw
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    Select the image type:Color image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "_0")
    Name to assign these images:Rings
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "_2")
    Name to assign these images:BlackBg
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "_1")
    Name to assign these images:LP
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "_3")
    Name to assign these images:staining
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "_4")
    Name to assign these images:tissuebg
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "_5")
    Name to assign these images:Greenfiber
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
Resize:[module_num:5|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notes:['Resize probability map to the original size of the raw image']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
    Select the input image:Rings
    Name the output image:RsRings
    Resizing method:Resize by specifying desired final dimensions
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    Interpolation method:Nearest Neighbor
    Method to specify the dimensions:Image
    Select the image with the desired dimensions:Raw
    Additional image count:5
    Select the additional image?:BlackBg
    Name the output image:RsBlackBg
    Select the additional image?:LP
    Name the output image:RsLP
    Select the additional image?:staining
    Name the output image:RsStaining
    Select the additional image?:tissuebg
    Name the output image:RsTissuebg
    Select the additional image?:Greenfiber
    Name the output image:RsGreenfiber

IdentifyPrimaryObjects:[module_num:6|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notes:['Segment epithelial cell compartment based on the epithelial cell probabillity map']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
    Select the input image:RsRings
    Name the primary objects to be identified:epithelialmask
    Typical diameter of objects, in pixel units (Min,Max):100,20000000
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:Never
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.5,1.0
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    Log transform before thresholding?:No
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
ColorToGray:[module_num:7|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notes:['Split raw image into blue (DAPI), red (ZO-1) and green (claudin-1)']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
    Select the input image:Raw
    Conversion method:Split
    Image type:RGB
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    Convert red to gray?:Yes
    Name the output image:Red
    Convert green to gray?:Yes
    Name the output image:Green
    Convert blue to gray?:Yes
    Name the output image:Blue
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
ColorToGray:[module_num:8|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notes:['Convert the raw RGB image into a combined greyscale image for identification of tissuearea']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
    Select the input image:Raw
    Conversion method:Combine
    Image type:RGB
    Name the output image:identifyROI
    Relative weight of the red channel:1.0
    Relative weight of the green channel:1.0
    Relative weight of the blue channel:1.0
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
EnhanceOrSuppressFeatures:[module_num:9|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notes:['Enhance blue channel with a top-hat filter to remove dim blue background and highlight the nuclei']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
    Select the input image:Blue
    Name the output image:THBlue
    Select the operation:Enhance
    Feature size:30
    Feature type:Speckles
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    Speed and accuracy:Fast
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
ImageMath:[module_num:10|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notes:['log transform the blue channel to fascilitate identification of nuclei']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
    Operation:Log transform (base 2)
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:logblue
    Image or measurement?:Image
    Select the first image:THBlue
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
IdentifyPrimaryObjects:[module_num:11|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notes:['identify/segment the nuclei']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
    Select the input image:logblue
    Name the primary objects to be identified:prenuclei
    Typical diameter of objects, in pixel units (Min,Max):12,75
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:10
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:Never
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:3
    Threshold correction factor:0.5
    Lower and upper bounds on threshold:0.02,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
ExpandOrShrinkObjects:[module_num:12|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notes:['shrink nuclei to a point to enable a more even distribution of nucleic siza']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
    Select the input objects:prenuclei
    Name the output objects:ShrunkenNuclei
    Select the operation:Shrink objects to a point
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    Fill holes in objects so that all objects shrink to a single point?:Yes

IdentifySecondaryObjects:[module_num:13|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notes:['Expand all nuclei by 12 pixels']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
    Select the input objects:ShrunkenNuclei
    Name the objects to be identified:Nuclei
    Select the method to identify the secondary objects:Distance - B
    Select the input image:logblue
    Number of pixels by which to expand the primary objects:12
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    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.015,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
MaskObjects:[module_num:14|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notes:['classify nuclei as eoithelial nuclei based on their overlap with the segmented epithelial cell compartment from the probabillity map.']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
    Select objects to be masked:Nuclei
    Name the masked objects:Epithelialnuclei
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:epithelialmask
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    Handling of objects that are partially masked:Remove depending on overlap
    Fraction of object that must overlap:0.8
    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:15|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notes:['Classify the remaining nuclei that weren’t classified as epithelial as lamina propria cells']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
    Select objects to be masked:Nuclei
    Name the masked objects:LPnuclei
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:Epithelialnuclei
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

IdentifySecondaryObjects:[module_num:16|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notes:['expand lamina propria nuclei by 3 pixels to better represent their morphology']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
    Select the input objects:LPnuclei
    Name the objects to be identified:LPcells
    Select the method to identify the secondary objects:Distance - N
    Select the input image:logblue
    Number of pixels by which to expand the primary objects:3
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    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
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
IdentifySecondaryObjects:[module_num:17|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notes:['Expand epithelial nuclei by 15 pixels to better represent the size of epithelial cells']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
    Select the input objects:Epithelialnuclei
    Name the objects to be identified:preEpithelialcells
    Select the method to identify the secondary objects:Distance - N
    Select the input image:logblue
    Number of pixels by which to expand the primary objects:15
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    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
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
MaskObjects:[module_num:18|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notes:['since lamina propria and epithelial cnuclei were expanded independently of each other there might be some overlap between the two cell population.', '', 'In this module, overlapping regions are xonsidered as part of the lamina propria cell.']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
    Select objects to be masked:preEpithelialcells
    Name the masked objects:Epithelialcells
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:LPcells
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

IdentifyPrimaryObjects:[module_num:19|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notes:['Identify the black background of the image using the probabillity map for black background']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
    Select the input image:RsBlackBg
    Name the primary objects to be identified:ProbBlackbg
    Typical diameter of objects, in pixel units (Min,Max):100,1000000000
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:Never
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:1.3488
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    Manual threshold:0.5
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
MeasureImageAreaOccupied:[module_num:20|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notes:['measure area occupied by epithelial cells and lamina propria cells ']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
    Measure the area occupied by:Objects
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    Select object sets to measure:Epithelialcells, LPcells

ConvertObjectsToImage:[module_num:21|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notes:['the identified black background is converted into a binary image']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
    Select the input objects:ProbBlackbg
    Name the output image:BlackBgImage
    Select the color format:Binary (black & white)
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
ImageMath:[module_num:22|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notes:['the binary image of the black background is inverted and the region is classified as the region where tissue is present']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
    Operation:Invert
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:Tissueimage
    Image or measurement?:Image
    Select the first image:BlackBgImage
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
IdentifyPrimaryObjects:[module_num:23|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notes:['the region containing tissue is identified based on the binary tissue image']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
    Select the input image:Tissueimage
    Name the primary objects to be identified:Tissue
    Typical diameter of objects, in pixel units (Min,Max):10,40
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:Never
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:1.3488
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    Manual threshold:0.01
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
IdentifyPrimaryObjects:[module_num:24|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notes:['The region of interest (ROI) is identified, representing the whole image']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
    Select the input image:identifyROI
    Name the primary objects to be identified:ROI
    Typical diameter of objects, in pixel units (Min,Max):10,40
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:Never
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0
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    Manual threshold:0.0
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
MeasureImageAreaOccupied:[module_num:25|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notes:['The area occupied by ROI and tissue is calculated']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
    Measure the area occupied by:Objects
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    Select object sets to measure:ROI, Tissue

MaskImage:[module_num:26|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notes:['the area occupied by black background is removed from the raw image to be removed for analysis of the full epithelial compartment ']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
    Select the input image:Raw
    Name the output image:Raw1
    Use objects or an image as a mask?:Objects
    Select object for mask:ProbBlackbg
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    Invert the mask?:Yes

IdentifyPrimaryObjects:[module_num:27|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notes:['the lamina propria cell compartment is identified based on the lamina propria probabillity map']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
    Select the input image:RsLP
    Name the primary objects to be identified:probLP
    Typical diameter of objects, in pixel units (Min,Max):10,200000000
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:Never
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:1.3488
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    Manual threshold:0.4
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
MaskImage:[module_num:28|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notes:['the region occupied by the lamina propria cell compartment is removed for analysis of the full epithelial compartment']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
    Select the input image:Raw1
    Name the output image:Raw2
    Use objects or an image as a mask?:Objects
    Select object for mask:probLP
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    Invert the mask?:Yes

IdentifyPrimaryObjects:[module_num:29|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notes:['Identify the region where EJP stain is located based on the probabillity map']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
    Select the input image:RsStaining
    Name the primary objects to be identified:Positivestaining
    Typical diameter of objects, in pixel units (Min,Max):10,40
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:Never
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:1.3488
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    Manual threshold:0.4
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
MaskImage:[module_num:30|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notes:['mask the identified staining from the tissue background to avoid false removal in later steps']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
    Select the input image:RsTissuebg
    Name the output image:maskedTissuebg
    Use objects or an image as a mask?:Objects
    Select object for mask:Positivestaining
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    Invert the mask?:Yes

IdentifyPrimaryObjects:[module_num:31|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notes:['identify the tissue background from probabillity map to remove for epithelial analysis']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
    Select the input image:maskedTissuebg
    Name the primary objects to be identified:ProbTissuebg
    Typical diameter of objects, in pixel units (Min,Max):10,40
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:Never
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0
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    Manual threshold:0.3
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
MaskImage:[module_num:32|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notes:['remove tissue background from raw image']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
    Select the input image:Raw2
    Name the output image:Raw3
    Use objects or an image as a mask?:Objects
    Select object for mask:ProbTissuebg
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    Invert the mask?:Yes

MaskImage:[module_num:33|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notes:['Remove epithelial cell compartment from the high green autopfluorescence probabillity mask']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
    Select the input image:RsGreenfiber
    Name the output image:Greenfiber2
    Use objects or an image as a mask?:Objects
    Select object for mask:epithelialmask
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    Invert the mask?:Yes

MaskImage:[module_num:34|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notes:['Remove epithelial EJP staining (pidentified from probabillity mask) from the high green autopfluorescence probabillity mask']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
    Select the input image:Greenfiber2
    Name the output image:Greenfiber3
    Use objects or an image as a mask?:Objects
    Select object for mask:Positivestaining
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    Invert the mask?:Yes

IdentifyPrimaryObjects:[module_num:35|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notes:['Identify high green autofluorescence ']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
    Select the input image:Greenfiber3
    Name the primary objects to be identified:Fiber
    Typical diameter of objects, in pixel units (Min,Max):300,1000000
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:1.3488
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    Manual threshold:0.25
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
MaskImage:[module_num:36|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notes:['Remove identified region of high green autofluorescence from the raw image for analysis of the epithelial compartment']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
    Select the input image:Raw3
    Name the output image:Raw4
    Use objects or an image as a mask?:Objects
    Select object for mask:Fiber
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    Invert the mask?:Yes

ColorToGray:[module_num:37|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notes:['Split raw image (containing only the epithelial compartment) into individual channels, blue (DAPI), green (claudin-1) and red (ZO-1)']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
    Select the input image:Raw4
    Conversion method:Split
    Image type:RGB
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    Convert red to gray?:Yes
    Name the output image:OrigRed
    Convert green to gray?:Yes
    Name the output image:OrigGreen
    Convert blue to gray?:Yes
    Name the output image:OrigBlue
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
ColorToGray:[module_num:38|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notes:['Convert image (containing only the epithelial compartment) into greyscale image for identification of epithelial tissue']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
    Select the input image:Raw4
    Conversion method:Combine
    Image type:RGB
    Name the output image:raw4combined
    Relative weight of the red channel:1.0
    Relative weight of the green channel:1.0
    Relative weight of the blue channel:1.0
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
IdentifyPrimaryObjects:[module_num:39|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notes:['Identify epithelial tissue']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
    Select the input image:raw4combined
    Name the primary objects to be identified:Epithelialtissue
    Typical diameter of objects, in pixel units (Min,Max):10,40
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:Never
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:1.3488
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    Manual threshold:0.001
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
EnhanceOrSuppressFeatures:[module_num:40|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notes:['Enhance tubular structures for ZO1 (red channel) to fascilitate segmentation']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
    Select the input image:OrigRed
    Name the output image:ThRed
    Select the operation:Enhance
    Feature size:8
    Feature type:Neurites
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    Smoothing scale:1
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    Enhancement method:Line structures
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    Rescale result image:No

GaussianFilter:[module_num:41|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notes:['smoothen tubular structures to fascilitate ZO-1 segmentation']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
    Select the input image:ThRed
    Name the output image:ThGaussianRed
    Sigma:1

IdentifyPrimaryObjects:[module_num:42|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notes:['Identify/segment ZO-1']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
    Select the input image:ThGaussianRed
    Name the primary objects to be identified:segmentedZO1
    Typical diameter of objects, in pixel units (Min,Max):6,1000000000
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:Never
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0
    Threshold correction factor:0.6
    Lower and upper bounds on threshold:0.04,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Background
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
GrayToColor:[module_num:43|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notes:['combine blue (DAPI) and red (ZO-1) channels for visualisation purposes']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
    Select a color scheme:RGB
    Rescale intensity:Yes
    Select the image to be colored red:OrigRed
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    Select the image to be colored blue:OrigBlue
    Name the output image:redcolor
    Relative weight for the red image:1.0
    Relative weight for the green image:1.0
    Relative weight for the blue image:1.0
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
OverlayOutlines:[module_num:44|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notes:['Overlay ZO-1 segmentation on the red and blue image for visualization and validation']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
    Display outlines on a blank image?:No
    Select image on which to display outlines:redcolor
    Name the output image:OrigOverlay
    Outline display mode:Color
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    How to outline:Outer
    Select outline color:#21FF06
    Select objects to display:segmentedZO1

SaveImages:[module_num:45|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
    Select the type of image to save:Image
    Select the image to save:OrigOverlay
    Select method for constructing file names:From image filename
    Select image name for file prefix:Raw
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_ZO1
    Saved file format:png
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

EnhanceOrSuppressFeatures:[module_num:46|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notes:['Enhance tubular structures for claudin-1 (green channel) to fascilitate segmentation']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
    Select the input image:OrigGreen
    Name the output image:ThGreen
    Select the operation:Enhance
    Feature size:8
    Feature type:Neurites
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    Smoothing scale:2.0
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    Enhancement method:Line structures
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    Rescale result image:No

GaussianFilter:[module_num:47|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notes:['smoothen tubular structures to fascilitate claudin-1 segmentation']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
    Select the input image:ThGreen
    Name the output image:ThGaussianGreen
    Sigma:1

IdentifyPrimaryObjects:[module_num:48|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notes:['Identify/segment claudin-1']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
    Select the input image:ThGaussianGreen
    Name the primary objects to be identified:segmentedClaudin1
    Typical diameter of objects, in pixel units (Min,Max):6,1000000000
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:Never
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0
    Threshold correction factor:0.7
    Lower and upper bounds on threshold:0.05,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Background
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
GrayToColor:[module_num:49|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notes:['combine blue (DAPI) and green (claudin-1) channels for visualisation purposes']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
    Select a color scheme:RGB
    Rescale intensity:Yes
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    Select the image to be colored green:OrigGreen
    Select the image to be colored blue:OrigBlue
    Name the output image:greencolor
    Relative weight for the red image:1.0
    Relative weight for the green image:1.0
    Relative weight for the blue image:1.0
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
OverlayOutlines:[module_num:50|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notes:['Overlay claudin-1 segmentation on the green and blue image for visualization and validation']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
    Display outlines on a blank image?:No
    Select image on which to display outlines:greencolor
    Name the output image:Occludinoverlay
    Outline display mode:Color
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    How to outline:Outer
    Select outline color:#FB0207
    Select objects to display:segmentedClaudin1

SaveImages:[module_num:51|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
    Select the type of image to save:Image
    Select the image to save:Occludinoverlay
    Select method for constructing file names:From image filename
    Select image name for file prefix:Raw
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_Claudin1
    Saved file format:png
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

MeasureImageAreaOccupied:[module_num:52|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notes:['Measure image area occupied by:', 'Epithelial cells', 'Epithelial tissue', 'Lamina propria cells', 'Segmented ZO-1', 'Segmented claudin-1']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
    Measure the area occupied by:Objects
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    Select object sets to measure:Epithelialcells, Epithelialtissue, LPcells, segmentedClaudin1, segmentedZO1

MeasureImageIntensity:[module_num:53|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notes:['measure the intensity of the segmented claudin-1 in the green channel']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
    Select images to measure:Green
    Measure the intensity only from areas enclosed by objects?:Yes
    Select input object sets:segmentedClaudin1
    Calculate custom percentiles:No
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
MeasureImageIntensity:[module_num:54|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notes:['measure the intensity of the epithelial cells in the green channel']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
    Select images to measure:Green
    Measure the intensity only from areas enclosed by objects?:Yes
    Select input object sets:Epithelialcells
    Calculate custom percentiles:No
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
MeasureImageIntensity:[module_num:55|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notes:['measure the intensity of the epithelial tissue in the green channel']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
    Select images to measure:Green
    Measure the intensity only from areas enclosed by objects?:Yes
    Select input object sets:Epithelialtissue
    Calculate custom percentiles:No
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
MeasureImageIntensity:[module_num:56|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notes:['measure the intensity of the whole tissue in the green channel']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
    Select images to measure:Green
    Measure the intensity only from areas enclosed by objects?:Yes
    Select input object sets:Tissue
    Calculate custom percentiles:No
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
MeasureImageIntensity:[module_num:57|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notes:['measure the intensity of the segmented ZO-1 in the red channel']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
    Select images to measure:Red
    Measure the intensity only from areas enclosed by objects?:Yes
    Select input object sets:segmentedZO1
    Calculate custom percentiles:No
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
MeasureImageIntensity:[module_num:58|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notes:['measure the intensity of the epithelial cells in the red channel']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
    Select images to measure:Red
    Measure the intensity only from areas enclosed by objects?:Yes
    Select input object sets:Epithelialcells
    Calculate custom percentiles:No
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
MeasureImageIntensity:[module_num:59|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notes:['measure the intensity of the epithelial tissue in the red channel']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
    Select images to measure:Red
    Measure the intensity only from areas enclosed by objects?:Yes
    Select input object sets:Epithelialtissue
    Calculate custom percentiles:No
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
MeasureImageIntensity:[module_num:60|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notes:['measure the intensity of the whole tissue in the red channel']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
    Select images to measure:Red
    Measure the intensity only from areas enclosed by objects?:Yes
    Select input object sets:Tissue
    Calculate custom percentiles:No
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
ExportToSpreadsheet:[module_num:61|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements:Image|Intensity_MeanIntensity_Red_segmentedZO1,Image|Intensity_MeanIntensity_Red_Epithelialcells,Image|Intensity_MeanIntensity_Red_Tissue,Image|Intensity_MeanIntensity_Red_Epithelialtissue,Image|Intensity_MeanIntensity_Green_Epithelialtissue,Image|Intensity_MeanIntensity_Green_segmentedClaudin1,Image|Intensity_MeanIntensity_Green_Tissue,Image|Intensity_MeanIntensity_Green_Epithelialcells,Image|Intensity_TotalIntensity_Red_segmentedZO1,Image|Intensity_TotalIntensity_Green_segmentedClaudin1,Image|AreaOccupied_AreaOccupied_LPcells,Image|AreaOccupied_AreaOccupied_segmentedClaudin1,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:ZO1_Claudin1_
    Overwrite existing files without warning?:Yes
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
